PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 900]
  color = $[-1,-1,-1]
  expName = creatingimages
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if triangle_pos != (0, 0.25):
            circle1_pos = (0, 0.25)
        else:
            circle1_pos = (0.1875, 0.1875)

        if triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
           circle2_pos = (0.1875, 0.1875)
        else:
            circle2_pos = (0.25, 0)


        if triangle_pos != (0.25, 0) and triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
           circle3_pos = (0.25, 0)
        else:
            circle3_pos = (0.1875, -0.1875)

        if triangle_pos == (0, -0.25) or triangle_pos == (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle4_pos = (0.1875, -0.1875)
        else:
            circle4_pos = (0, -0.25)


        if triangle_pos == (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
           circle5_pos = (0, -0.25)
        else:
            circle5_pos = (-0.1875, -0.1875)

        if triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle6_pos = (-0.1875, -0.1875)
        else:
            circle6_pos = (-0.25, 0)

        if triangle_pos == (-0.1875, 0.1875):
           circle7_pos = (-0.25, 0)
        else:
            circle7_pos = (-0.1875, 0.1875)

        if triangle_color == 'g':
            triangle1_color = [-0.6078, 0.6078, -0.6078]
        else:
            triangle1_color = [1.0000, -1.0000, 1.0000]

        if circle1_pos == pink_circle_pos:
            circle1_color = [1.0000, -1.0000, 1.0000]
        else:
            circle1_color = [-0.6078, 0.6078, -0.6078]

        if circle2_pos == pink_circle_pos:
            circle2_color = [1.0000, -1.0000, 1.0000]
        else:
            circle2_color = [-0.6078, 0.6078, -0.6078]

        if circle3_pos == pink_circle_pos:
            circle3_color = [1.0000, -1.0000, 1.0000]
        else:
            circle3_color = [-0.6078, 0.6078, -0.6078]

        if circle4_pos == pink_circle_pos:
            circle4_color = [1.0000, -1.0000, 1.0000]
        else:
            circle4_color = [-0.6078, 0.6078, -0.6078]

        if circle5_pos == pink_circle_pos:
            circle5_color = [1.0000, -1.0000, 1.0000]
        else:
            circle5_color = [-0.6078, 0.6078, -0.6078]

        if circle6_pos == pink_circle_pos:
            circle6_color = [1.0000, -1.0000, 1.0000]
        else:
            circle6_color = [-0.6078, 0.6078, -0.6078]

        if circle7_pos == pink_circle_pos:
            circle7_color = [1.0000, -1.0000, 1.0000]
        else:
            circle7_color = [-0.6078, 0.6078, -0.6078]
      End Routine:
        if mouse.isPressedIn (triangle1):
            continueRoutine = False
        else:
            continueRoutine = True
    PolygonComponent circle1
      fillColor [set every repeat] = $circle1_color
      lineColor [set every repeat] = $circle1_color
      pos [set every repeat] = $circle1_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle2
      fillColor [set every repeat] = $circle2_color
      lineColor [set every repeat] = $circle2_color
      pos [set every repeat] = $circle2_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle3
      fillColor [set every repeat] = $circle3_color
      lineColor [set every repeat] = $circle3_color
      pos [set every repeat] = $circle3_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle4
      fillColor [set every repeat] = $circle4_color
      lineColor [set every repeat] = $circle4_color
      pos [set every repeat] = $circle4_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle5
      fillColor [set every repeat] = $circle5_color
      lineColor [set every repeat] = $circle5_color
      pos [set every repeat] = $circle5_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle6
      fillColor [set every repeat] = $circle6_color
      lineColor [set every repeat] = $circle6_color
      pos [set every repeat] = $circle6_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent circle7
      fillColor [set every repeat] = $circle7_color
      lineColor [set every repeat] = $circle7_color
      pos [set every repeat] = $circle7_pos
      shape = circle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle1
      fillColor [set every repeat] = $triangle1_color
      lineColor [set every repeat] = $triangle1_color
      pos [set every repeat] = $triangle_pos
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = [circle1, circle2, circle3, circle4, circle5, circle6, circle7, triangle1]
      correctAns = triangle1
      forceEndRoutineOnPress = correct click
      saveMouseState = final
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end_page
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  Routine Welcome_Page
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    CodeComponent code_2
      Code Type = Auto->JS
Flow
  Routine Welcome_Page
  LoopInitiator trials24 loopType="TrialHandler"
    conditionsFile = /Users/carolineobrien/Downloads/Conditions Spreadsheet-2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'triangle_pos': (0, 0.25), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0.1875, 0.1875), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0.25, 0), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0.1875, -0.1875), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0, -0.25), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-0.1875, -0.1875), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-0.25, 0), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-0.1875, 0.1875), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0, 0.25), 'triangle_color': 'g', 'pink_circle_pos': (-0.1875, -0.1875)},
      {'triangle_pos': (0.1875, 0.1875), 'triangle_color': 'g', 'pink_circle_pos': (0, -0.25)},
      {'triangle_pos': (0.25, 0), 'triangle_color': 'g', 'pink_circle_pos': (0, 0.25)},
      {'triangle_pos': (0.1875, -0.1875), 'triangle_color': 'g', 'pink_circle_pos': (0.25, 0)},
      {'triangle_pos': (0, -0.25), 'triangle_color': 'g', 'pink_circle_pos': (-0.1875, 0.1875)},
      {'triangle_pos': (-0.1875, -0.1875), 'triangle_color': 'g', 'pink_circle_pos': (-0.25, 0)},
      {'triangle_pos': (-0.25, 0), 'triangle_color': 'g', 'pink_circle_pos': (0.1875, -0.1875)},
      {'triangle_pos': (-0.1875, 0.1875), 'triangle_color': 'g', 'pink_circle_pos': (0.1875, 0.1875)},
      {'triangle_pos': (0, 0.25), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0.1875, 0.1875), 'triangle_color': 'p', 'pink_circle_pos': 0.0}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
    Routine trial
  LoopTerminator trials24
  Routine end_page
