PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  color = $[-1, -1, -1]
  expName = searchArrayTrial
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine WelcomePage
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment

        Press the SpaceBar to begin!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be 15 images.

        Using your mouse, select the rhombus in each image.

        Press the spacebar to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image1_1
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    PolygonComponent greencircle1
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouseImage1
      clickable = greencircle1, greencircle2, greencircle3, greencircle4, greencircle5, greencircle6, greencircle7, greentriangle,
      correctAns = greentriangle,
      forceEndRoutineOnPress = correct click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine image1_2
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    PolygonComponent greencircle1_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouseImage1_2
      clickable = greencircle1_2, greencircle2_2, greencircle3_2, greencircle4_2, greencircle5_2, greencircle6_2, greencircle7_2, greentriangle_2,
      correctAns = greentriangle_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine image1_3
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    PolygonComponent greencircle1_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouseImage1_3
      clickable = greencircle1_3, greencircle2_3, greencircle3_3, greencircle4_3, greencircle5_3, greencircle6_3, greencircle7_3, greentriangle_3,
      correctAns = greentriangle_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine image2_1
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    PolygonComponent greencircle1_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent pinkcircle
      fillColor = 1.0000, -1.0000, 1.0000
      lineColor = 1.0000, -1.0000, 1.0000
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouseImage1_4
      clickable = greencircle1_4, greencircle2_4, greencircle3_4, greencircle4_4, greencircle5_4, greencircle6_4, pinkcircle, greentriangle_4,
      correctAns = greentriangle_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine image3_1
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    PolygonComponent greencircle1_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent pinktriangle
      fillColor = 1.0000, -1.0000, 1.0000
      lineColor = 1.0000, -1.0000, 1.0000
      pos = (0.1875, -.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouseImage1_5
      clickable = greencircle1_5, greencircle2_5, greencircle3_5, greencircle4_5, greencircle5_5, greencircle6_5, pinktriangle, greencircle7_5,
      correctAns = greentriangle_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine WelcomePage
  Routine Instructions
  Routine image1_1
  Routine image1_2
  Routine image1_3
  Routine image2_1
  Routine image3_1
