PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = test2_run
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        mywin = visual.Window ([600, 600], monitor = "testMonitor", units = "deg", color = [-1, -1, -1])
      Begin Routine:
        import numpy as np

        xvalues_range = [0, 3, 4, 3, 0, -3, -4, -3]
        yvalues_range = [4, 3, 0, -3, -4, -3, 0, 3]

        possible_positions = [(0, 0), (3, 3), (4, 0), (3, -3), (0, -4), (-3, -3), (-4, 0), (-3, 3)]

        #for ii in possible_positions:

        i = np.random.randint(4)
        ii = possible_positions[i]
        circle1_pos = (ii[0]/16, ii[1]/16)
                #circle1.setPos (ii)
                #if ii == pink_circle_pos:
                    #circle1.color = (255, 0, 0)
                #else:
                    #circle1.color = (0, 255, 0)
                #circle1.draw()
         #mywin.update()
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    PolygonComponent circle1
      fillColor [set every repeat] = -1.0000, -1.0000, 1.0000
      lineColor [set every repeat] = white
      pos [set every repeat] = $circle1_pos
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 3.0
      text = done
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Flow
  LoopInitiator trials24 loopType="TrialHandler"
    conditionsFile = /Users/carolineobrien/Downloads/Conditions Spreadsheet.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'triangle_pos': (0, 4), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, 3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (4, 0), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, -3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0, -4), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-3, -3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-4, 0), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-3, 3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0, 4), 'triangle_color': 'g', 'pink_circle_pos': (-3, -3)},
      {'triangle_pos': (3, 3), 'triangle_color': 'g', 'pink_circle_pos': (0, -4)},
      {'triangle_pos': (4, 0), 'triangle_color': 'g', 'pink_circle_pos': (0, 4)},
      {'triangle_pos': (3, -3), 'triangle_color': 'g', 'pink_circle_pos': (4, 0)},
      {'triangle_pos': (0, -4), 'triangle_color': 'g', 'pink_circle_pos': (-3, 3)},
      {'triangle_pos': (-3, -3), 'triangle_color': 'g', 'pink_circle_pos': (-4, 0)},
      {'triangle_pos': (-4, 0), 'triangle_color': 'g', 'pink_circle_pos': (3, -3)},
      {'triangle_pos': (-3, 3), 'triangle_color': 'g', 'pink_circle_pos': (3, 3)},
      {'triangle_pos': (0, 4), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, 3), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (4, 0), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, -3), 'triangle_color': 'p', 'pink_circle_pos': 0.0}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
    Routine trial
  LoopTerminator trials24
